/*datapaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_6/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default.ome - Denoised.tif.tif"
					
					);

respaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_1_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_4_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_5_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_6/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_6_MMStack_Default.ome - Denoised.tif_locs.csv"
					
					);

*/

/* datapaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default.ome - Denoised.tif.tif"
					
					);

respaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_1_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_2_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_3_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_4_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/GOF_YODA_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate2_GoF_2uMyoda1_5_MMStack_Default.ome - Denoised.tif_locs.csv"
					
					);

*/

/* datapaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_1_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_3_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_4_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_5_MMStack_Default.ome - Denoised.tif.tif"
					
					);

respaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_1_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT2/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_3_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_4_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/WT5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_5_MMStack_Default.ome - Denoised.tif_locs.csv"
					
					);

*/

datapaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default.ome - Denoised.tif.tif",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_6/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default.ome - Denoised.tif.tif"
					
					);

respaths = newArray("/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_1/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_1_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_3/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_3_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_4/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_4_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_5/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_5_MMStack_Default.ome - Denoised.tif_locs.csv",
					"/Users/george/Desktop/from_Gabby/filesForAnalysis/Non-BAPTA/WithActinStain/Yoda1_6/GB_199_2022_09_01_HTEndothelial_NonBAPTA_plate1_2uMyoda1_6_MMStack_Default.ome - Denoised.tif_locs.csv"
					
					);



for (i=0; i  < datapaths.length; i++) {
	open(datapaths[i]);
	run("Run analysis", "filter=[Wavelet filter (B-Spline)] scale=2.0 order=3 detector=[Local maximum] connectivity=4-neighbourhood threshold=std(Wave.F1) estimator=[PSF: Integrated Gaussian] sigma=1.6 fitradius=3 method=[Weighted Least squares] full_image_fitting=false mfaenabled=false renderer=[Averaged shifted histograms] magnification=5.0 colorizez=false threed=false shifts=2 repaint=50");
	run("Export results", "filepath=["+respaths[i]+"] fileformat=[CSV (comma separated)] sigma=true intensity=true chi2=true offset=true saveprotocol=true x=true y=true bkgstd=true id=true uncertainty=true frame=true");
	//close();
    while (nImages>0) { 
        selectImage(nImages); 
        close(); 
    } 
}